PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = lexical_decision_task
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Routines
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.0
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      text:
        In this task you will be required to judge whether a string of letters is a word or a non-word.

        Press left arrow key for non-words and right arrow key for words.

        Please respond as quickly as possible.

        Press space to continue.
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1
      text [set every repeat] = $words
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    KeyboardComponent response
      allowedKeys = 'right', 'left'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.

        Thank you for your time.
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experimental_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('words', 'way'), ('number_of_letters', 3), ('corrAns', 'right'), ('condition', 'word')]),
      OrderedDict([('words', 'woy'), ('number_of_letters', 3), ('corrAns', 'left'), ('condition', 'pseudo')]),
      OrderedDict([('words', 'and'), ('number_of_letters', 3), ('corrAns', 'right'), ('condition', 'word')]),
      OrderedDict([('words', 'anf'), ('number_of_letters', 3), ('corrAns', 'left'), ('condition', 'pseudo')]),
      OrderedDict([('words', 'want'), ('number_of_letters', 4), ('corrAns', 'right'), ('condition', 'word')]),
      OrderedDict([('words', 'wunt'), ('number_of_letters', 4), ('corrAns', 'left'), ('condition', 'pseudo')]),
      OrderedDict([('words', 'much'), ('number_of_letters', 4), ('corrAns', 'right'), ('condition', 'word')]),
      OrderedDict([('words', 'mech'), ('number_of_letters', 4), ('corrAns', 'left'), ('condition', 'pseudo')]),
      OrderedDict([('words', 'their'), ('number_of_letters', 5), ('corrAns', 'right'), ('condition', 'word')]),
      OrderedDict([('words', 'theyr'), ('number_of_letters', 5), ('corrAns', 'left'), ('condition', 'pseudo')]),
      OrderedDict([('words', 'about'), ('number_of_letters', 5), ('corrAns', 'right'), ('condition', 'word')]),
      OrderedDict([('words', 'aboot'), ('number_of_letters', 5), ('corrAns', 'left'), ('condition', 'pseudo')]),
      OrderedDict([('words', 'should'), ('number_of_letters', 6), ('corrAns', 'right'), ('condition', 'word')]),
      OrderedDict([('words', 'shoule'), ('number_of_letters', 6), ('corrAns', 'left'), ('condition', 'pseudo')])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
    Routine Trial
  LoopTerminator trials
  Routine End
